CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag in all images to be analysed. Blue ending ch00.tif, green ending ch01.tif and red ending ch02.tif.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch01.tif")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch02.tif")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei based on size and intensity.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify green channel based on nuclei, size and intensity.']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
    Select the input objects:Nuclei
    Name the objects to be identified:SegGreen
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGreen
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    Regularization factor:0.2
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.7
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identify red channel based on nuclei, size and intensity.']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
    Select the input objects:Nuclei
    Name the objects to be identified:SegRed
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigRed
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    Regularization factor:0.2
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.4
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectIntensity:[module_num:8|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notes:['Measure intensity of cells in green channel.']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
    Hidden:1
    Select an image to measure:OrigGreen
    Select objects to measure:SegGreen

MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity of cells in red channel.']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
    Hidden:1
    Select an image to measure:OrigRed
    Select objects to measure:SegRed

MeasureObjectSizeShape:[module_num:10|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notes:['Measure area (and other parameters) of cells in red and green channel.']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
    Select objects to measure:SegGreen
    Select objects to measure:SegRed
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:11|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notes:['Create overlay of segmentation on raw image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGreen
    Name the output image:SegGreenOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00FF40
    Select objects to display:SegGreen

OverlayOutlines:[module_num:12|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notes:['Create overlay of segmentation on raw image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigRed
    Name the output image:SegRedOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:SegRed

DisplayDataOnImage:[module_num:13|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notes:['Display measured parameters on raw image (with segmentation).']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
    Display object or image measurements?:Object
    Select the input objects:SegGreen
    Measurement to display:Intensity_MeanIntensity_OrigGreen
    Select the image on which to display the measurements:SegGreenOverlay
    Text color:green
    Name the output image that has the measurements displayed:Green_Intensity
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:14|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notes:['Display measured parameters on raw image (with segmentation).']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
    Display object or image measurements?:Object
    Select the input objects:SegGreen
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:SegGreenOverlay
    Text color:green
    Name the output image that has the measurements displayed:Green_Area
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:15|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notes:['Display measured parameters on raw image (with segmentation).']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
    Display object or image measurements?:Object
    Select the input objects:SegRed
    Measurement to display:Intensity_MeanIntensity_OrigRed
    Select the image on which to display the measurements:SegRedOverlay
    Text color:magenta
    Name the output image that has the measurements displayed:Red_Intensity
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:16|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notes:['Display measured parameters on raw image (with segmentation).']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
    Display object or image measurements?:Object
    Select the input objects:SegRed
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:SegRedOverlay
    Text color:magenta
    Name the output image that has the measurements displayed:Red_Area
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ExportToSpreadsheet:[module_num:17|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notes:['Save measurements.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Desktop\\\\\\\\cp
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_OrigGreen,Image|FileName_OrigBlue,Image|FileName_OrigRed,SegRed|Intensity_MeanIntensity_OrigRed,SegRed|AreaShape_Area,SegGreen|Intensity_MeanIntensity_OrigGreen,SegGreen|AreaShape_Area
    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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